SequentialMode

Public PTemp, batt_volt
Public ArduinoCall As Long
Public ArduinoNum As Long
Public Loopr As Long
Public InString As String * 140

Public ResultString(10) 'As String * 140
Alias ResultString (1) = Sensor 'As Float
Alias ResultString (2) = X_accel 'As Float
Alias ResultString (3) = Y_accel 'As Float
Alias ResultString (4) = Z_accel 'As Float
Alias ResultString (5) = X_mag 'As Float
Alias ResultString (6) = Y_mag 'As Float
Alias ResultString (7) = Z_mag 'As Float
Alias ResultString (8) = temp_C 'As Float
Alias ResultString (9) = temp_F 'As Float
Alias ResultString (10) = Wall 'As Float
DataTable (JE18m,-1,-1)
	Sample (10,ResultString(),IEEE4)
EndTable

BeginProg
  SerialOpen (32,9600,16,0,1024)
	Scan (360,Min,0,0)
		SW12(1) 'Power on the sensor string
		Delay (0,3,Sec) 'Wait for Arduinos to initialize
		PanelTemp (PTemp,250)
		Battery (batt_volt)
		Loopr = 0
		ArduinoNum = 0
		ArduinoCall = 0
		'Loop through the sensor address numbers twice
		For Loopr = 1 To 2 
		  For ArduinoNum = 1 To 7
		    Select Case ArduinoNum
		    Case 1
		      ArduinoCall = 240000
		    Case 2
		      ArduinoCall = 250000
		    Case 3
		      ArduinoCall = 260000
		    Case 4
		      ArduinoCall = 270000
		    Case 5
		      ArduinoCall = 290000
		    Case 6
		      ArduinoCall = 300000
		    Case 7
		      ArduinoCall = 310000
		    EndSelect
		    SerialFlush (32)
		    SerialOut (32,ArduinoCall,0,0,0)
		    SerialIn (InString,32,200,33,160)
		    'Break down AND record space-separated readings in Table
		    SplitStr (ResultString(),InString,CHR(32),10,5) 
		    CallTable JE18m
		    Delay(0,1,sec)
		  Next ArduinoNum
		Next Loopr 
		SW12(0) 'Power down the sensor string
	NextScan
EndProg
